PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = verbal overshadowing effect
  keyboardBackend = ioHub
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Routines
  Routine learning_phase
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Images will be presented. Pay attention to them.
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    ImageComponent image_4
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 5.0
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  Routine description_phase
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        you will be presented with descriptions in form of paras. Read them and answer the question accordingly. click submit after done answering
    ImageComponent image
      image [set every repeat] = $paragraph
      pos = (0, 200)
      size = (920, 95)
      startVal [time (s)] = 5.0
      units = pix
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.1)
      startVal [time (s)] = 5.0
      text = SUBMIT
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = verbal overshadowing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\1vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\2vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\3vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\4vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\5vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\6vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\7vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\8vis.png'},
      {'images': 'C:\\Users\\Amit\\Pictures\\Screenshots\\9vis.png'}]
    Routine learning_phase
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = description phase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\band.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\bday.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\cafe.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\camp.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\canteen.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\gallery.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\games.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\kinder.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\mall.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\market.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\office.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\park.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\pickle.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\playground.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\science.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\stroll.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\train.png'},
      {'paragraph': 'C:\\Users\\Amit\\Pictures\\Screenshots\\zoo.png'}]
    Routine description_phase
  LoopTerminator trials_2
